PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $[0.5, 0.5, 0.5]
  expName = CDT_online
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions
    TextComponent instr_text
      letterHeight = 26
      startVal [time (s)] = 0.0
      text = $"Control Detection Task\n\nIn this experiment, you will control one of two shapes\nusing your mouse movements.\n\nYour task is to identify which shape you are controlling.\n\nMove your mouse to see the shapes respond.\nThe shape that follows your movement is the one you control.\n\nPress A for Square, S for Circle\n\nPress SPACE to continue."
      wrapWidth = 1000
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    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent trial_code
      Code Type = Auto->JS
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    PolygonComponent square
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos [set every frame] = (-300, 0)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.0
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    PolygonComponent dot
      fillColor = black
      lineColor = black
      lineWidth = 2
      nVertices = 32
      pos [set every frame] = (300, 0)
      shape = circle
      size = (40, 40)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = any click
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine timeout_feedback
    CodeComponent timeout_check
      Code Type = Auto->JS
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    TextComponent timeout_text
      letterHeight = 26
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Too slow!\n\nPlease respond faster next time.
      wrapWidth = 1000
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  Routine confidence
    CodeComponent conf_skip_check
      Code Type = Auto->JS
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    TextComponent conf_text
      letterHeight = 26
      startVal [time (s)] = 0.0
      text = How confident are you in your choice?\n\n1 = Not at all confident\n2 = Slightly confident\n3 = Moderately confident\n4 = Very confident
      wrapWidth = 1000
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    KeyboardComponent conf_key
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent conf_save
      Code Type = Auto->JS
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  Routine agency
    CodeComponent agency_skip_check
      Code Type = Auto->JS
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    TextComponent agency_text
      letterHeight = 26
      pos = (0, 50)
      startVal [time (s)] = 0.0
      text = How much control did you feel over the shape's movement?
      wrapWidth = 1000
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    TextComponent agency_scale
      letterHeight = 18
      pos = (0, -100)
      startVal [time (s)] = 0.0
      text = 1          2          3          4          5          6          7\nVery      Weak    Somewhat   Moderate  Somewhat   Strong    Very\nweak                weak                  strong              strong
      wrapWidth = 1200
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    KeyboardComponent agency_key
      allowedKeys = '1', '2', '3', '4', '5', '6', '7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent agency_save
      Code Type = Auto->JS
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  Routine end
    TextComponent end_text
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participating!\n\nYour data has been saved.
      wrapWidth = 1000
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  Routine init_resources
    CodeComponent load_resources
      Code Type = JS
      Before JS Experiment:
        // Global variables matching offline experiment
        var motionLibrary = null;
        var trajectoryPairs = null;
        var currentPropSelf = 0.4;
        var currentAngleBias = 0;
        var currentExpectLevel = 'high';
      Begin JS Routine:
        // Load resources using functions from cdt_utils.js
        loadAllResources();
      Each JS Frame:
        // Wait for resources to load
        if (!resourcesLoaded()) {
            // Keep waiting
        } else {
            continueRoutine = false;
        }
    TextComponent loading_text
      letterHeight = 30
      startVal [time (s)] = 0.0
      text = Loading experiment resources...\n\nPlease wait.
      wrapWidth = 1000
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Flow
  Routine init_resources
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    endPoints = random
    loggingLevel = exp
    nReps = 1
    random seed = random
    selection = random
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    Routine trial
    Routine timeout_feedback
    Routine confidence
    Routine agency
  LoopTerminator trials
  Routine end
